j=1;

Dialog.create("Stiching parameters");
Dialog.addNumber("Number of wells",100);
Dialog.addNumber("Tile overlap (from 0-100)",10);
Dialog.addNumber("grid Heigth",3);
Dialog.addNumber("grid Length",3);
Dialog.show();
wells = Dialog.getNumber();
tile = Dialog.getNumber();
y= Dialog.getNumber();
x= Dialog.getNumber();
print(wells)
print(tile)

dirorigin = getDirectory("Choose Source Directory");
dir = getDirectory("Choose Destination Directory");
for (i=1; i<=wells; i++) {
	print(j);
	run("Grid/Collection stitching", "type=[Grid: row-by-row] order=[Right & Down] grid_size_x=&x grid_size_y=&y tile_overlap=&tile first_file_index_i=j directory=[&dirorigin] file_names=Test_{iiii}.tif output_textfile_name=TileConfiguration.txt fusion_method=[Linear Blending] regression_threshold=0.30 max/avg_displacement_threshold=2.50 absolute_displacement_threshold=3.50 compute_overlap subpixel_accuracy computation_parameters=[Save memory (but be slower)] image_output=[Fuse and display]");
	j = i*x*y+1;
	print(j);
	a=dir+i+".tif";
	saveAs("Tiff", a);
	close();
}
